import ij.IJ;
import ij.ImagePlus;
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;

runtime = Runtime.getRuntime();
System.out.println(runtime.availableProcessors() + " cores available for multi-threading");

// Loads parameters from job file into .bsh file

image_file_directory = System.getProperty( "image_file_directory" );
timepoints = System.getProperty( "timepoints" );
channels = System.getProperty( "channels" ); 
acquisition_angles = System.getProperty( "acquisition_angles" );
image_file_pattern = System.getProperty( "image_file_pattern" );
float pixel_distance_x = Float.parseFloat( System.getProperty( "pixel_distance_x" ) );
float pixel_distance_y = Float.parseFloat( System.getProperty( "pixel_distance_y" ) );
float pixel_distance_z = Float.parseFloat( System.getProperty( "pixel_distance_z" ) );
pixel_unit = System.getProperty( "pixel_unit" );
xml_filename = System.getProperty( "xml_filename" );
type_of_dataset = System.getProperty( "type_of_dataset" );
multiple_timepoints = System.getProperty( "multiple_timepoints" );
multiple_channels = System.getProperty( "multiple_channels" );
multiple_illumination_directions = System.getProperty( "multiple_illumination_directions" );
multiple_angles = System.getProperty( "multiple_angles" );
imglib_container = System.getProperty( "imglib_container" );

// Writes parameters into output file

System.out.println( "image_file_directory = " + image_file_directory );
System.out.println( "timepoints = " + timepoints );
System.out.println( "channels = " + channels );
System.out.println( "acquisition_angles = " + acquisition_angles );
System.out.println( "image_file_pattern = " + image_file_pattern );
System.out.println( "pixel_distance_x = " + pixel_distance_x );
System.out.println( "pixel_distance_y = " + pixel_distance_y );
System.out.println( "pixel_distance_z = " + pixel_distance_z );
System.out.println( "pixel_unit = " + pixel_unit );
System.out.println( "xml_filename = " + xml_filename );
System.out.println( "type_of_dataset = " + type_of_dataset );
System.out.println( "multiple_timepoints = " + multiple_timepoints );
System.out.println( "multiple_channels = " + multiple_channels );
System.out.println( "multiple_illumination_directions = " + multiple_illumination_directions );
System.out.println( "multiple_angles = " + multiple_angles );
System.out.println( "imglib_container = " + imglib_container );

// Executes Fiji plugin

IJ.run("Define Multi-View Dataset", 
	"type_of_dataset=[" + type_of_dataset + "] " +
	"xml_filename=[" + xml_filename + ".xml] " +
	"multiple_timepoints=[" + multiple_timepoints + "] " +
	"multiple_channels=[" + multiple_channels + "] " +
	"_____multiple_illumination_directions=[" + multiple_illumination_directions + "] " + 
	"multiple_angles=[" + multiple_angles + "] " +
	"image_file_directory=" + image_file_directory + " " +
	"image_file_pattern=" + image_file_pattern + " " + 
	"timepoints_=" + timepoints + " " +
	"channels_=" + channels	+ " " +		// for dual channel comment out if single channel
	"acquisition_angles_=" + acquisition_angles + " " +  
	"calibration_type=[Same voxel-size for all views] calibration_definition=[User define voxel-size(s)]" + " " + 
	"imglib2_data_container=[" + imglib_container + "] " + 
	"pixel_distance_x=" + pixel_distance_x + " " + 
	"pixel_distance_y=" + pixel_distance_y + " " + 
	"pixel_distance_z=" + pixel_distance_z + " " +
	"pixel_unit=" + pixel_unit + "");
 
/* shutdown */
runtime.exit(0);


