// Load Fiji dependencies
import ij.IJ; 		// calls imagej
import ij.Prefs; 	// calls imagej settings
import ij.ImagePlus;
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;
 
runtime = Runtime.getRuntime();
System.out.println(runtime.availableProcessors() + " cores available for multi-threading");

Prefs.setThreads(1); 	// defines the number of threads allowed 
print("Threads: "+Prefs.getThreads()); // prints thread setting in output

// Load xml file
System.out.println("---------------------------------------------------------");
System.out.println("Xml file:");

xml_path = System.getProperty( "image_file_directory" );
merged_xml = System.getProperty( "merged_xml" );

System.out.println( "selected_xml = " + xml_path + merged_xml + ".xml");

// General Registration Parameters and Channel Settings
System.out.println("---------------------------------------------------------");
System.out.println( "General parameters: " );

timelapse_process_timepoints = System.getProperty( "timelapse_process_timepoints" );
reg_process_illumination = System.getProperty( "reg_process_illumination" );
reg_process_angle = System.getProperty( "reg_process_angle" ); 

System.out.println( "process_timepoints = " + timelapse_process_timepoints ); 

System.out.println( "process_illumination = " + reg_process_illumination );
System.out.println( "process_angle = " + reg_process_angle );

	
// Timelapse registration Parameter
System.out.println("---------------------------------------------------------");
System.out.println( "Timelapse Registration: " );

reference_timepoint = System.getProperty( "reference_timepoint" );
System.out.println( "reference_timepoint=" + reference_timepoint );

type_of_registration_timelapse = System.getProperty( "type_of_registration_timelapse" );
registration_algorithm = System.getProperty( "registration_algorithm" );


System.out.println( "type_of_registration = " + type_of_registration_timelapse );
System.out.println( "registration_algorithm = " + registration_algorithm );


transformation_model = System.getProperty( "transformation_model" );
model_to_regularize_with = System.getProperty( "model_to_regularize_with" );
float lambda = Float.parseFloat( System.getProperty( "lambda" ) );
int allowed_error_for_ransac = Integer.parseInt( System.getProperty( "allowed_error_for_ransac" ) );
significance = System.getProperty( "significance" );

System.out.println( "transformation = " + transformation );
System.out.println( "model_to_regularize_with = " + model_to_regularize_with );
System.out.println( "lambda = " + lambda );
System.out.println( "allowed_error_for_ransac = " + allowed_error_for_ransac );
System.out.println( "significance = " + significance );

// Timelapse registration Parameter
System.out.println("---------------------------------------------------------");
System.out.println( "Channel Settings: " );
// Channel Setting Registration
// parses channels and takes from there the number of channels
// takes from reg_process_channel if it is Single Channel, Dual Channel or Dual Channel
// were one Channel contains the beads
// from this it decides which string to assemble

reg_process_channel = System.getProperty( "reg_process_channel" );
System.out.println( "process_channel = " + reg_process_channel );

channels = System.getProperty( "channels" );
System.out.println( "Channels = " + channels );

reg_interest_points_channel = System.getProperty( "reg_interest_points_channel" );
System.out.println( "reg_interest_points_channel = " + reg_interest_points_channel );

// Splits up channels, reg_interest_points_channel
String delims = "[,]";
String[] channel_token = channels.split(delims);
String[] interest_token = reg_interest_points_channel.split(delims);
		
String reg_single_channel_string = "";
StringBuilder reg_multi_channel_string = new StringBuilder();

	if (channels.equalsIgnoreCase(""))
	{
		System.out.println("Warning: There are no channels set");
	}
		
	// Returns Error if Single Channel selected but multiple settings in channels or reg_interest_points_channel
	else if ( reg_process_channel.equalsIgnoreCase( "Single Channel" ) && (channel_token.length > 1 || interest_token.length > 1 ))
	{
		System.out.println( "Error: Single Channel selected but multiple settings in channls or reg_interest_points_channel" );
	}
	
	// Assembles string for Single Channel registration
	else if (reg_process_channel.equalsIgnoreCase( "Single channel" ) && channel_token.length == 1 )	
	{	
		reg_multi_channel_string.append( "" );
		reg_single_channel_string = "interest_points_channel_" + channels + "=" + reg_interest_points_channel + " ";
	}

	// Returns error if Multi Channels are selected but not enough settings in channels or 	reg_interest_points_channel
	else if (reg_process_channel.equalsIgnoreCase( "All channels" ) &&  ( channel_token.length < 1 || interest_token.length < 1) ) 
	{
		System.out.println( "Error: Multi Channel selected but only one setting in channels or reg_interest_points_channel" );
	}
	
	// Assembles string for Multi Channel registration
	else if (reg_process_channel.equalsIgnoreCase( "All channels" ) && channel_token.length > 1 ) 
	{
		for (int channel=0; channel < channel_token.length; channel++ )

			{	
				String channel_part = "interest_points_channel_" + channel_token[channel] + "=" + interest_token[channel] + " ";
				reg_multi_channel_string.append( channel_part );
				reg_multi_channel_string.append(" ");
			}
	}
		
	// Returns error of Multi Channels one Channel contains the beads is selected but not enough settings in channels or reg_interest_points_channel
	else if (reg_process_channel.equalsIgnoreCase( "Single channel (Select from List)" ) && ( channel_token.length < 1 || interest_token.length < 1 ))
	{
		System.out.println( "Error: Multi Channel one Channel contains beads selected but only one setting in channls or reg_interest_points_channel" );
	}
	
	// Assembles string for Multi Channel Processing one Channel Contains the beads	
	else if (reg_process_channel.equalsIgnoreCase( "Single channel (Select from List)" ) && channel_token.length > 1 && interest_token.length > 1 )	
	{
			for (int channel=0; channel < channel_token.length; channel++ )

			{	
				String channel_part = "interest_points_channel_" + channel_token[channel] + "=" + interest_token[channel] + " ";
				reg_multi_channel_string.append( channel_part );
				reg_multi_channel_string.append(" ");
			}
			
	}

System.out.println( "reg_single_channel_string = " + reg_single_channel_string );
System.out.println( "reg_multi_channel_string = " + reg_multi_channel_string );


System.out.println( "=======================================================" );
System.out.println( "Starting Timelapse Registration" );

System.out.println( "Register Dataset based on Interest Points , select_xml=" + xml_path + merged_xml + ".xml " + 
	"process_angle=[" + reg_process_angle + "] " + 
	"process_channel=[" + reg_process_channel + "] " +
	"process_illumination=[" + reg_process_illumination + "] " +  
	"process_timepoint=[" + timelapse_process_timepoints + "] " +
	"registration_algorithm=[" + registration_algorithm + "] " + 
	"type_of_registration=[" + type_of_registration_timelapse + "] " +
	reg_multi_channel_string +
	reg_single_channel_string +
//	"interest_points_channel_" + channel_1 + "=" + reg_1_interest_points_channel + " " +
//	"interest_points_channel_" + channel_2 + "=" + reg_2_interest_points_channel + " " + // Dual Channel 
	"reference=" + reference_timepoint + " " +
	"consider_each_timepoint_as_rigid_unit " +
	"transformation=" + transformation_model + " " +
	"regularize_model " +
	"model_to_regularize_with=" + model_to_regularize_with + " " +
	"lamba=" + lambda + " " +
	"allowed_error_for_ransac=" + allowed_error_for_ransac + " " +
	"significance=" + significance + "");


IJ.run("Register Dataset based on Interest Points", 
	"select_xml=" + xml_path + merged_xml + ".xml " + 
	"process_angle=[" + reg_process_angle + "] " + 
	"process_channel=[" + reg_process_channel + "] " +
	"process_illumination=[" + reg_process_illumination + "] " +  
	"process_timepoint=[" + timelapse_process_timepoints + "] " +
	"registration_algorithm=[" + registration_algorithm + "] " + 
	"type_of_registration=[" + type_of_registration_timelapse + "] " +
	reg_multi_channel_string +
	reg_single_channel_string +
//	"interest_points_channel_" + channel_1 + "=" + reg_1_interest_points_channel + " " +
//	"interest_points_channel_" + channel_2 + "=" + reg_2_interest_points_channel + " " + // Dual Channel 
	"reference=" + reference_timepoint + " " +
	"consider_each_timepoint_as_rigid_unit " +
	"transformation=" + transformation_model + " " +
	"regularize_model " +
	"model_to_regularize_with=" + model_to_regularize_with + " " +
	"lamba=" + lambda + " " +
	"allowed_error_for_ransac=" + allowed_error_for_ransac + " " +
	"significance=" + significance + "");

/* shutdown */
runtime.exit(0);
