import ij.IJ;
import ij.ImagePlus;
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;

dir = System.getProperty( "dir" );
xml_filename = System.getProperty( "xml_filename" );
resave_angle = System.getProperty( "resave_angle" );
resave_channel = System.getProperty( "resave_channel" );
resave_illumination = System.getProperty( "resave_illumination" );
resave_timepoint = System.getProperty( "resave_timepoint" );
subsampling_factors = System.getProperty( "subsampling_factors" );
hdf5_chunk_sizes = System.getProperty( "hdf5_chunk_sizes" );
timepoints_per_partition = System.getProperty( "timepoints_per_partition" );
setups_per_partition = System.getProperty( "setups_per_partition" );
run_only_job_number = System.getProperty( "run_only_job_number" );

System.out.println( "dir=" + dir );
System.out.println( "xml_filename=" + xml_filename);
System.out.println( "resave_angle=" + resave_angle );
System.out.println( "resave_channel=" + resave_channel );
System.out.println( "resave_illumination=" + resave_illumination );
System.out.println( "resave_timepoint=" + resave_timepoint);
System.out.println( "subsampling_factors=" + subsampling_factors);
System.out.println( "hdf5_chunk_sizes=" + hdf5_chunk_sizes );
System.out.println( "timepoints_per_partition=" + timepoints_per_partition );
System.out.println( "setups_per_partition=" + setups_per_partition );
System.out.println( "run_only_job_number=" + run_only_job_number );

//activate cluster processing

IJ.run("Toggle Cluster Processing", "display_cluster");

IJ.run("As HDF5", 
	"select_xml=" + dir + xml_filename + " " +
	"resave_angle=[" + resave_angle + "] " + 
	"resave_channel=[" + resave_channel + "] " +
	"resave_illumination=[" + resave_illumination + "] " +
	"resave_timepoint=[" + resave_timepoint + "] " +
	"subsampling_factors=[" + subsampling_factors + "] " +
	"hdf5_chunk_sizes=[" + hdf5_chunk_sizes + "] " +
	"split_hdf5 " + 
	"timepoints_per_partition=" + timepoints_per_partition + " " +
	"setups_per_partition=" + setups_per_partition + " " +
	"run_only_job_number=" + run_only_job_number + " " +
	"use_deflate_compression " + 
	"export_path=" + dir + "hdf5_" + xml_filename );

/* shutdown */
System.exit(0);

